PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotionaction2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    ImageComponent emostim
      image [set every repeat] = $picture
      pos = (0, 300)
      size = (450, 450)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 16
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = '3','8','5','1','0'
      forceEndRoutine = True
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 16
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "towards", "neutral", "away"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.03)
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 16
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent manikin
      image [set every repeat] = $im_2
      size = (500, 500)
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 16.0
      units = pix
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    ImageComponent i1
      image [set every repeat] = $im_2
      pos = (0, -300)
      size = (400, 400)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.5
      units = pix
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  Routine INTRO
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        WELCOME TO THE EXPERIMENT

        You will be shown an image on the screen. The image will stay on for a while. After that you have to respond by pressing the following keys in the board:

        "3" if you want to move TOWARDS it
        "5" if you are NEUTRAL about it and
        "8" if you want to move AWAY from it.

        Press "SPACEBAR" to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine INTRO
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ANANYAA/OneDrive/Desktop/emovari.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\2102', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\2200', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7032', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7034', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7050', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7050', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7060', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7100', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7140', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'},
      {'picture': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\LowA(Neutral)\\7513', 'p_ne_n': 'n', 'im_2': 'C:\\Users\\ANANYAA\\OneDrive\\Desktop\\manikin'}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
    Routine trial
  LoopTerminator trials
